// credits AFM2Chimera:
// code by Ignacio CASUSO, INSERM, Marseille 2023
// email: ignacio.casuso@inserm.fr
// 
waitForUser("FIND and show the frame of interest, next click OK");
rename("InputStack");
run("Duplicate...", " ");
selectImage("InputStack");
close();
selectImage("InputStack-1");
run("32-bit");
run("Subtract Background...", "rolling=256 disable");
setOption("ScaleConversions", true);
run("8-bit");
run("Multiply...", "value=0.9");
run("8-bit");
rename("RawImage");
stepsize=1;
i_max=255/stepsize;
for(i = 1;i<i_max;i++){ 
maxlevel=i*stepsize;	
run("Duplicate...", " ");
setThreshold(0, maxlevel);
setOption("BlackBackground", false);
run("Convert to Mask");
run("Outline");
//run("32-bit");
//run("Manual Threshold...", "min=2 max=260");
//run("NaN Background");
selectWindow("RawImage");
}
close();
run("Images to Stack");
waitForUser("FIND the number of slide of the substrate and run SurfaceTomography_AFM_Image_02_ ");
